CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['Reads the per-plate LoadData CSV generated by `cytopipe loaddata` (Metadata_Plate/Well/Site + Image_FileName_Orig<channel> columns only, this pipeline calculates the illumination function rather than applying one, so no Illum<channel> columns are needed here). The CSV path is set at run time via --data-file, so the values below are placeholders. Must stay the first module.']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
    Input data file location:Default Output Folder|E:\\Torkild
    Name of the file:ImageQC_W51_b3.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

Resize:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DownsampledDNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:3|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumDNA below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:4|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
    Select the input image:IllumDNA
    Name the output image:UpsampledIllumDNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:5|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
    Select the input image:OrigER
    Name the output image:DownsampledER
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:6|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumER below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:7|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
    Select the input image:IllumER
    Name the output image:UpsampledIllumER
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:8|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
    Select the input image:OrigRNA
    Name the output image:DownsampledRNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:9|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumRNA below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:10|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
    Select the input image:IllumRNA
    Name the output image:UpsampledIllumRNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:11|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
    Select the input image:OrigAGP
    Name the output image:DownsampledAGP
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:12|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumAGP below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:13|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
    Select the input image:IllumAGP
    Name the output image:UpsampledIllumAGP
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:14|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
    Select the input image:OrigMito
    Name the output image:DownsampledMito
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:15|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumMito below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:16|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
    Select the input image:IllumMito
    Name the output image:UpsampledIllumMito
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

SaveImages:[module_num:17|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notes:['Fixed contract, the single file name (IllumAGP below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumAGP
    Select method for constructing file names:Single name
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    Enter single file name:IllumAGP
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:18|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notes:['Fixed contract, the single file name (IllumDNA below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumDNA
    Select method for constructing file names:Single name
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    Enter single file name:IllumDNA
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:19|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notes:['Fixed contract, the single file name (IllumER below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumER
    Select method for constructing file names:Single name
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    Enter single file name:IllumER
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:20|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notes:['Fixed contract, the single file name (IllumMito below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumMito
    Select method for constructing file names:Single name
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    Enter single file name:IllumMito
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:21|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notes:['Fixed contract, the single file name (IllumRNA below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumRNA
    Select method for constructing file names:Single name
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    Enter single file name:IllumRNA
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
