CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['Reads the per-plate LoadData CSV generated by `cytopipe loaddata` (Metadata_Plate/Well/Site + Image_FileName_Orig<channel> columns), replacing the Images/Metadata/NamesAndTypes chain that extracted metadata from filenames directly. The CSV path is set at run time via --data-file, so the values below are placeholders.']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
    Input data file location:Default Output Folder|
    Name of the file:load_data.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

Groups:[module_num:2|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

CorrectIlluminationCalculate:[module_num:3|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notes:['JUMP: Nothing to tune (except possibly the Block Size and Smoothing Filter Size, in case your images are very small/large)', 'JUMP: This calculates the Per-Image illumination function.', 'NOTE: This assumes that the cells are NOT confluent, and thus that there wil be background intensity pixels spread across the image.']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
    Select the input image:OrigDNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:4|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notes:['JUMP: Nothing to tune.', 'JUMP: This applies the Per-Image illumination function.']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
    Select the input image:OrigDNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:5|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notes:['Segmentation input is CorrBlue (illum-corrected DNA), but the sizing/declumping settings below are the original nuclei.cppipe tuning, not 1_QC.cppipe tuning - kept as-is to avoid changing which/how many nuclei get exported to the DeepProfiler bridge.']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,75
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1
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    Log transform before thresholding?:No
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
ExportToSpreadsheet:[module_num:6|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notes:['Kept from the original nuclei.cppipe: this is what CYTOPIPE_BRIDGE / DeepProfiler consume as per-site nuclei locations. Do not rename/relocate without updating CELLPROFILER_NUCLEI in nextflow/modules/cellprofiler.nf.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|locations/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Location_Center_X,Nuclei|Location_Center_Y
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:\g<Well>-\g<Site>-Nuclei.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:7|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notes:['Kept from the original nuclei.cppipe: flat per-chunk Image.csv that CELLPROFILER_NUCLEI renames and CYTOPIPE_BRIDGE consumes. Do not rename/relocate without updating CELLPROFILER_NUCLEI in nextflow/modules/cellprofiler.nf. QC review (per-well Image.csv + overlay gallery) is no longer computed here at all - it lives entirely in `--pipeline qc` (1_QC.cppipe), since this branch never published or read that output.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Site,Image|Metadata_Well,Image|Metadata_Plate,Image|FileName_OrigDNA,Image|FileName_OrigRNA,Image|FileName_OrigAGP,Image|FileName_OrigER,Image|FileName_OrigMito
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
