CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "thumb")

Metadata:[module_num:2|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notes:['', '']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Experiment>[^_]+(?:-[^_]+)*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]{1,2})_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[/\\](?P<Date>\d{4}-\d{2}-\d{2})[/\\](?P<Plate>\d{5})[/\\]TimePoint_(?P<TimePoint>[0-9]+)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Match metadata:[{'OrigDNA': 'Well', 'OrigMito': 'Well', 'OrigAGP': 'Well', 'OrigRNA': 'Well', 'OrigER': 'Well'}, {'OrigDNA': 'Site', 'OrigMito': 'Site', 'OrigAGP': 'Site', 'OrigRNA': 'Site', 'OrigER': 'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:OrigDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|locations/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Location_Center_X,Nuclei|Location_Center_Y
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:\g<Well>-\g<Site>-Nuclei.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Site,Image|Metadata_Well,Image|Metadata_Plate,Image|FileName_OrigDNA,Image|FileName_OrigRNA,Image|FileName_OrigAGP,Image|FileName_OrigER,Image|FileName_OrigMito
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
